<CompuCell3D Revision="20150808" Version="3.7.4">
   <Potts>
      <Dimensions x="100" y="100" z="1"/>
      <Steps>10100</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
   </Potts>
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="1"/>
      <CellType TypeId="2" TypeName="2"/>
   </Plugin>
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="1" LambdaVolume="1.9554244091" TargetVolume="25"/>
      <VolumeEnergyParameters CellType="2" LambdaVolume="1.30185001129" TargetVolume="25"/>
   </Plugin>
   <Plugin Name="Surface">
      <SurfaceEnergyParameters CellType="1" LambdaSurface="1.11363984479" TargetSurface="22"/>
      <SurfaceEnergyParameters CellType="2" LambdaSurface="1.1079812962" TargetSurface="24"/>
   </Plugin>
   <Plugin Name="CenterOfMass"/>
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="1">30.0</Energy>
      <Energy Type1="1" Type2="1">14</Energy>
      <Energy Type1="Medium" Type2="2">16.0</Energy>
      <Energy Type1="2" Type2="2">2</Energy>
      <Energy Type1="1" Type2="2">11</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin>
   <Steppable Type="RandomFieldInitializer">
      <offset x="10" y="10" z="0"/>
      <growthsteps>10</growthsteps>
      <order>2</order>
      <types>1,2</types>
      <ncells>142</ncells>
   </Steppable>
</CompuCell3D>
