<CompuCell3D Revision="20150808" Version="3.7.4">
   <Potts>
      <Dimensions x="220" y="220" z="1"/>
      <Steps>1010</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <RandomSeed>951441</RandomSeed>
   </Potts>
   <Plugin Name="PlayerSettings">
      <VisualControl ScreenshotFrequency="1000"/>
   </Plugin>
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType Freeze="" TypeId="9" TypeName="Wall"/>
      <CellType TypeId="1" TypeName="1"/>
      <CellType TypeId="2" TypeName="2"/>
   </Plugin>
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="1" LambdaVolume="36.5" TargetVolume="73"/>
      <VolumeEnergyParameters CellType="2" LambdaVolume="17.0" TargetVolume="34"/>
   </Plugin>
   <Plugin Name="Surface">
      <SurfaceEnergyParameters CellType="1" LambdaSurface="1.04061482046" TargetSurface="24"/>
      <SurfaceEnergyParameters CellType="2" LambdaSurface="1.26591733983" TargetSurface="22"/>
   </Plugin>
   <Plugin Name="CenterOfMass"/>
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Wall" Type2="Wall">0.0</Energy>
      <Energy Type1="Wall" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="1">25</Energy>
      <Energy Type1="Wall" Type2="1">50.0</Energy>
      <Energy Type1="1" Type2="1">-3</Energy>
      <Energy Type1="1" Type2="2">8</Energy>
      <Energy Type1="Medium" Type2="2">21</Energy>
      <Energy Type1="Wall" Type2="2">50.0</Energy>
      <Energy Type1="2" Type2="2">9</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin>
   <Plugin Name="Chemotaxis">
      <ChemicalField Name="FDS" Source="DiffusionSolverFE">
         <ChemotaxisByType Lambda="2" Type="1"/>
         <ChemotaxisByType Lambda="19" Type="2"/>
      </ChemicalField>
   </Plugin>
   <Steppable Type="DiffusionSolverFE">
      <DiffusionField Name="FDS">
         <DiffusionData>
            <FieldName>FDS</FieldName>
            <GlobalDiffusionConstant>0.283576228409</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.637925076969</GlobalDecayConstant>
            <DiffusionCoefficient CellType="Wall">0</DiffusionCoefficient>
            <DoNotDiffuseTo CellType="Wall">Wall</DoNotDiffuseTo>
         </DiffusionData>
         <SecretionData>
            <Secretion Type="1">44.3686997125</Secretion>
            <Secretion Type="2">90.5836827652</Secretion>
         </SecretionData>
      </DiffusionField>
   </Steppable>
   <Steppable Type="RandomFieldInitializer">
      <offset x="10" y="10" z="0"/>
      <growthsteps>10</growthsteps>
      <order>2</order>
      <types>1,2</types>
      <ncells>100</ncells>
      <seed>577757</seed>
   </Steppable>
</CompuCell3D>
