<CompuCell3D Revision="20150808" Version="3.7.4">
   <Potts>
      <Dimensions x="220" y="220" z="1"/>
      <Steps>1010</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <RandomSeed>585419</RandomSeed>
   </Potts>
   <Plugin Name="PlayerSettings">
      <VisualControl ScreenshotFrequency="1000"/>
   </Plugin>
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType Freeze="" TypeId="9" TypeName="Wall"/>
      <CellType TypeId="1" TypeName="1"/>
   </Plugin>
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="1" LambdaVolume="39.5" TargetVolume="79"/>
   </Plugin>
   <Plugin Name="Surface">
      <SurfaceEnergyParameters CellType="1" LambdaSurface="1.36049760933" TargetSurface="22"/>
   </Plugin>
   <Plugin Name="CenterOfMass"/>
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Wall" Type2="Wall">0.0</Energy>
      <Energy Type1="Wall" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="1">-9</Energy>
      <Energy Type1="Wall" Type2="1">50.0</Energy>
      <Energy Type1="1" Type2="1">-5</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin>
   <Plugin Name="Chemotaxis">
      <ChemicalField Name="FDS" Source="DiffusionSolverFE">
         <ChemotaxisByType Lambda="18" Type="1"/>
      </ChemicalField>
   </Plugin>
   <Steppable Type="DiffusionSolverFE">
      <DiffusionField Name="FDS">
         <DiffusionData>
            <FieldName>FDS</FieldName>
            <GlobalDiffusionConstant>0.122170884435</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.00757502966512</GlobalDecayConstant>
            <DiffusionCoefficient CellType="Wall">0</DiffusionCoefficient>
            <DoNotDiffuseTo CellType="Wall">Wall</DoNotDiffuseTo>
         </DiffusionData>
         <SecretionData>
            <Secretion Type="1">65.1599532599</Secretion>
         </SecretionData>
      </DiffusionField>
   </Steppable>
   <Steppable Type="RandomFieldInitializer">
      <offset x="10" y="10" z="0"/>
      <growthsteps>10</growthsteps>
      <order>2</order>
      <types>1</types>
      <ncells>100</ncells>
      <seed>525637</seed>
   </Steppable>
</CompuCell3D>
