<CompuCell3D Revision="20150808" Version="3.7.4">
   <Potts>
      <Dimensions x="220" y="220" z="1"/>
      <Steps>1010</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <RandomSeed>263853</RandomSeed>
   </Potts>
   <Plugin Name="PlayerSettings">
      <VisualControl ScreenshotFrequency="1000"/>
   </Plugin>
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType Freeze="" TypeId="9" TypeName="Wall"/>
      <CellType TypeId="1" TypeName="1"/>
      <CellType TypeId="2" TypeName="2"/>
   </Plugin>
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="1" LambdaVolume="42.5" TargetVolume="85"/>
      <VolumeEnergyParameters CellType="2" LambdaVolume="27.0" TargetVolume="54"/>
   </Plugin>
   <Plugin Name="CenterOfMass"/>
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Wall" Type2="Wall">0.0</Energy>
      <Energy Type1="Wall" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="1">26</Energy>
      <Energy Type1="Wall" Type2="1">50.0</Energy>
      <Energy Type1="1" Type2="1">9</Energy>
      <Energy Type1="1" Type2="2">-2</Energy>
      <Energy Type1="Medium" Type2="2">2</Energy>
      <Energy Type1="Wall" Type2="2">50.0</Energy>
      <Energy Type1="2" Type2="2">10</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin>
   <Plugin Name="Chemotaxis">
      <ChemicalField Name="FDS" Source="DiffusionSolverFE">
         <ChemotaxisByType Lambda="9" Type="2"/>
      </ChemicalField>
   </Plugin>
   <Steppable Type="DiffusionSolverFE">
      <DiffusionField Name="FDS">
         <DiffusionData>
            <FieldName>FDS</FieldName>
            <GlobalDiffusionConstant>0.903081166703</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.206089664715</GlobalDecayConstant>
            <DiffusionCoefficient CellType="Wall">0</DiffusionCoefficient>
            <DoNotDiffuseTo CellType="Wall">Wall</DoNotDiffuseTo>
         </DiffusionData>
         <SecretionData>
            <Secretion Type="1">38.6871574508</Secretion>
            <Secretion Type="2">6.72547481524</Secretion>
         </SecretionData>
      </DiffusionField>
   </Steppable>
   <Steppable Type="RandomFieldInitializer">
      <offset x="10" y="10" z="0"/>
      <growthsteps>10</growthsteps>
      <order>2</order>
      <types>1,2</types>
      <ncells>100</ncells>
      <seed>447794</seed>
   </Steppable>
</CompuCell3D>
