<CompuCell3D Revision="20150808" Version="3.7.4">
   <Potts>
      <Dimensions x="100" y="100" z="1"/>
      <Steps>1010</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <RandomSeed>6674492</RandomSeed>
   </Potts>
   <Plugin Name="PlayerSettings">
      <VisualControl ScreenshotFrequency="1000"/>
   </Plugin>
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType Freeze="" TypeId="9" TypeName="Wall"/>
      <CellType TypeId="1" TypeName="1"/>
      <CellType TypeId="2" TypeName="2"/>
   </Plugin>
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="1" LambdaVolume="1.54050232714" TargetVolume="16"/>
      <VolumeEnergyParameters CellType="2" LambdaVolume="1.40265439875" TargetVolume="16"/>
   </Plugin>
   <Plugin Name="Surface">
      <SurfaceEnergyParameters CellType="1" LambdaSurface="1.64542371848" TargetSurface="24"/>
      <SurfaceEnergyParameters CellType="2" LambdaSurface="1.45493311163" TargetSurface="23"/>
   </Plugin>
   <Plugin Name="CenterOfMass"/>
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Wall" Type2="Wall">0.0</Energy>
      <Energy Type1="Wall" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="1">3.38497921158</Energy>
      <Energy Type1="Wall" Type2="1">50.0</Energy>
      <Energy Type1="1" Type2="1">3.57274334793</Energy>
      <Energy Type1="1" Type2="2">0.844519813033</Energy>
      <Energy Type1="Medium" Type2="2">5.05803704115</Energy>
      <Energy Type1="Wall" Type2="2">50.0</Energy>
      <Energy Type1="2" Type2="2">17.7999115268</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin>
   <Steppable Type="RandomFieldInitializer">
      <offset x="10" y="10" z="0"/>
      <growthsteps>10</growthsteps>
      <order>2</order>
      <types>1,2</types>
      <ncells>132</ncells>
   </Steppable>
</CompuCell3D>
