<CompuCell3D Revision="20150808" Version="3.7.4">
   <Potts>
      <Dimensions x="100" y="100" z="1"/>
      <Steps>1010</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <RandomSeed>9876200</RandomSeed>
   </Potts>
   <Plugin Name="PlayerSettings">
      <VisualControl ScreenshotFrequency="1000"/>
   </Plugin>
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType Freeze="" TypeId="9" TypeName="Wall"/>
      <CellType TypeId="1" TypeName="1"/>
   </Plugin>
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="1" LambdaVolume="1.19631928054" TargetVolume="25"/>
   </Plugin>
   <Plugin Name="Surface">
      <SurfaceEnergyParameters CellType="1" LambdaSurface="1.26831752603" TargetSurface="22"/>
   </Plugin>
   <Plugin Name="CenterOfMass"/>
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Wall" Type2="Wall">0.0</Energy>
      <Energy Type1="Wall" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="1">27.9343044754</Energy>
      <Energy Type1="Wall" Type2="1">50.0</Energy>
      <Energy Type1="1" Type2="1">11.1008375579</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin>
   <Plugin Name="Chemotaxis">
      <ChemicalField Name="FDS" Source="DiffusionSolverFE"/>
   </Plugin>
   <Steppable Type="DiffusionSolverFE">
      <DiffusionField Name="FDS">
         <DiffusionData>
            <FieldName>FDS</FieldName>
            <GlobalDiffusionConstant>0.995989114098</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.550163485878</GlobalDecayConstant>
            <DiffusionCoefficient CellType="Wall">0</DiffusionCoefficient>
            <DoNotDiffuseTo CellType="Wall">Wall</DoNotDiffuseTo>
            <SecretionData Type="1">21.9923070424</SecretionData>
         </DiffusionData>
      </DiffusionField>
   </Steppable>
   <Steppable Type="RandomFieldInitializer">
      <offset x="10" y="10" z="0"/>
      <growthsteps>10</growthsteps>
      <order>2</order>
      <types>1</types>
      <ncells>167</ncells>
   </Steppable>
</CompuCell3D>
