<CompuCell3D Revision="20150808" Version="3.7.4">
   <Potts>
      <Dimensions x="220" y="220" z="1"/>
      <Steps>1010</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <RandomSeed>175430</RandomSeed>
   </Potts>
   <Plugin Name="PlayerSettings">
      <VisualControl ScreenshotFrequency="1000"/>
   </Plugin>
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType Freeze="" TypeId="9" TypeName="Wall"/>
      <CellType TypeId="1" TypeName="1"/>
      <CellType TypeId="2" TypeName="2"/>
   </Plugin>
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="1" LambdaVolume="50.0" TargetVolume="100"/>
      <VolumeEnergyParameters CellType="2" LambdaVolume="40.5" TargetVolume="81"/>
   </Plugin>
   <Plugin Name="Surface">
      <SurfaceEnergyParameters CellType="1" LambdaSurface="1.43871234033" TargetSurface="12"/>
      <SurfaceEnergyParameters CellType="2" LambdaSurface="1.86320627351" TargetSurface="12"/>
   </Plugin>
   <Plugin Name="CenterOfMass"/>
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Wall" Type2="Wall">0.0</Energy>
      <Energy Type1="Wall" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="1">11</Energy>
      <Energy Type1="Wall" Type2="1">50.0</Energy>
      <Energy Type1="1" Type2="1">-6</Energy>
      <Energy Type1="1" Type2="2">19</Energy>
      <Energy Type1="Medium" Type2="2">0</Energy>
      <Energy Type1="Wall" Type2="2">50.0</Energy>
      <Energy Type1="2" Type2="2">-6</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin>
   <Plugin Name="Chemotaxis">
      <ChemicalField Name="FDS" Source="DiffusionSolverFE">
         <ChemotaxisByType Lambda="17" Type="1"/>
      </ChemicalField>
   </Plugin>
   <Steppable Type="DiffusionSolverFE">
      <DiffusionField Name="FDS">
         <DiffusionData>
            <FieldName>FDS</FieldName>
            <GlobalDiffusionConstant>0.0203254701596</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.267215002966</GlobalDecayConstant>
            <DiffusionCoefficient CellType="Wall">0</DiffusionCoefficient>
            <DoNotDiffuseTo CellType="Wall">Wall</DoNotDiffuseTo>
         </DiffusionData>
         <SecretionData>
            <Secretion Type="1">88.9948287722</Secretion>
            <Secretion Type="2">97.4176991103</Secretion>
         </SecretionData>
      </DiffusionField>
   </Steppable>
   <Steppable Type="RandomFieldInitializer">
      <offset x="10" y="10" z="0"/>
      <growthsteps>10</growthsteps>
      <order>2</order>
      <types>1,2</types>
      <ncells>100</ncells>
      <seed>562536</seed>
   </Steppable>
</CompuCell3D>
