<CompuCell3D Revision="20150808" Version="3.7.4">
   <Potts>
      <Dimensions x="100" y="100" z="1"/>
      <Steps>1000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <RandomSeed>920507</RandomSeed>
   </Potts>
   <Plugin Name="PlayerSettings">
      <VisualControl ScreenshotFrequency="100"/>
   </Plugin>
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType Freeze="" TypeId="9" TypeName="Wall"/>
      <CellType TypeId="1" TypeName="1"/>
      <CellType TypeId="2" TypeName="2"/>
   </Plugin>
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="1" LambdaVolume="1.20021518664" TargetVolume="16"/>
      <VolumeEnergyParameters CellType="2" LambdaVolume="1.41812547949" TargetVolume="4"/>
   </Plugin>
   <Plugin Name="Surface">
      <SurfaceEnergyParameters CellType="1" LambdaSurface="1.35018159034" TargetSurface="16"/>
      <SurfaceEnergyParameters CellType="2" LambdaSurface="1.52496840033" TargetSurface="19"/>
   </Plugin>
   <Plugin Name="CenterOfMass"/>
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Wall" Type2="Wall">0.0</Energy>
      <Energy Type1="Wall" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="1">23.0896000911</Energy>
      <Energy Type1="Wall" Type2="1">50.0</Energy>
      <Energy Type1="1" Type2="1">3.25475522629</Energy>
      <Energy Type1="1" Type2="2">12.8455794871</Energy>
      <Energy Type1="Medium" Type2="2">9.43711733478</Energy>
      <Energy Type1="Wall" Type2="2">50.0</Energy>
      <Energy Type1="2" Type2="2">5.63025838151</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin>
   <Plugin Name="Chemotaxis">
      <ChemicalField Name="FDS" Source="FlexibleDiffusionSolverFE"/>
   </Plugin>
   <Steppable Type="FlexibleDiffusionSolverFE">
      <DiffusionField Name="FDS">
         <DiffusionData>
            <FieldName>FDS</FieldName>
            <DiffusionConstant>0.1</DiffusionConstant>
            <DecayConstant>1e-05</DecayConstant>
            <DiffusionCoefficient CellType="Wall">0</DiffusionCoefficient>
            <DoNotDiffuseTo CellType="Wall">Wall</DoNotDiffuseTo>
         </DiffusionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="10.0"/>
               <ConstantValue PlanePosition="Max" Value="5.0"/>
            </Plane>
            <Plane Axis="Y">
               <ConstantDerivative PlanePosition="Min" Value="10.0"/>
               <ConstantDerivative PlanePosition="Max" Value="5.0"/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
   <Steppable Type="RandomFieldInitializer">
      <offset x="10" y="10" z="0"/>
      <growthsteps>10</growthsteps>
      <order>2</order>
      <types>1,2</types>
      <ncells>113</ncells>
   </Steppable>
</CompuCell3D>
