<CompuCell3D Revision="20150808" Version="3.7.4">
   <Potts>
      <Dimensions x="150" y="150" z="1"/>
      <Steps>1010</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <RandomSeed>3953583</RandomSeed>
   </Potts>
   <Plugin Name="PlayerSettings">
      <VisualControl ScreenshotFrequency="1000"/>
   </Plugin>
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType Freeze="" TypeId="9" TypeName="Wall"/>
      <CellType TypeId="1" TypeName="1"/>
      <CellType TypeId="2" TypeName="2"/>
   </Plugin>
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="1" LambdaVolume="1.8119225063" TargetVolume="36"/>
      <VolumeEnergyParameters CellType="2" LambdaVolume="1.78456311648" TargetVolume="36"/>
   </Plugin>
   <Plugin Name="Surface">
      <SurfaceEnergyParameters CellType="1" LambdaSurface="1.63509212181" TargetSurface="12"/>
      <SurfaceEnergyParameters CellType="2" LambdaSurface="1.39999432161" TargetSurface="12"/>
   </Plugin>
   <Plugin Name="CenterOfMass"/>
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Wall" Type2="Wall">0.0</Energy>
      <Energy Type1="Wall" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="1">5</Energy>
      <Energy Type1="Wall" Type2="1">50.0</Energy>
      <Energy Type1="1" Type2="1">2</Energy>
      <Energy Type1="1" Type2="2">6</Energy>
      <Energy Type1="Medium" Type2="2">26</Energy>
      <Energy Type1="Wall" Type2="2">50.0</Energy>
      <Energy Type1="2" Type2="2">20</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin>
   <Plugin Name="Chemotaxis">
      <ChemicalField Name="FDS" Source="DiffusionSolverFE">
         <ChemotaxisByType Lambda="716627" Type="1"/>
      </ChemicalField>
   </Plugin>
   <Steppable Type="DiffusionSolverFE">
      <DiffusionField Name="FDS">
         <DiffusionData>
            <FieldName>FDS</FieldName>
            <GlobalDiffusionConstant>0.171598754806</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.929674512582</GlobalDecayConstant>
            <DiffusionCoefficient CellType="Wall">0</DiffusionCoefficient>
            <DoNotDiffuseTo CellType="Wall">Wall</DoNotDiffuseTo>
            <SecretionData Type="1">51.4087428502</SecretionData>
            <SecretionData Type="2">7.83311549459</SecretionData>
         </DiffusionData>
      </DiffusionField>
   </Steppable>
   <Steppable Type="RandomFieldInitializer">
      <offset x="10" y="10" z="0"/>
      <growthsteps>10</growthsteps>
      <order>2</order>
      <types>1,2</types>
      <ncells>146</ncells>
   </Steppable>
</CompuCell3D>
