<CompuCell3D Revision="20150808" Version="3.7.4">
   <Potts>
      <Dimensions x="100" y="100" z="1"/>
      <Steps>1010</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <RandomSeed>8152041</RandomSeed>
   </Potts>
   <Plugin Name="PlayerSettings">
      <VisualControl ScreenshotFrequency="100"/>
   </Plugin>
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType Freeze="" TypeId="9" TypeName="Wall"/>
      <CellType TypeId="1" TypeName="1"/>
      <CellType TypeId="2" TypeName="2"/>
   </Plugin>
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="1" LambdaVolume="1.04571267203" TargetVolume="4"/>
      <VolumeEnergyParameters CellType="2" LambdaVolume="1.09654515761" TargetVolume="16"/>
   </Plugin>
   <Plugin Name="Surface">
      <SurfaceEnergyParameters CellType="1" LambdaSurface="1.11715508303" TargetSurface="18"/>
      <SurfaceEnergyParameters CellType="2" LambdaSurface="1.70270065406" TargetSurface="16"/>
   </Plugin>
   <Plugin Name="CenterOfMass"/>
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Wall" Type2="Wall">0.0</Energy>
      <Energy Type1="Wall" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="1">7.674095208</Energy>
      <Energy Type1="Wall" Type2="1">50.0</Energy>
      <Energy Type1="1" Type2="1">5.34314319641</Energy>
      <Energy Type1="1" Type2="2">2.57003977107</Energy>
      <Energy Type1="Medium" Type2="2">16.6173554286</Energy>
      <Energy Type1="Wall" Type2="2">50.0</Energy>
      <Energy Type1="2" Type2="2">16.2357554674</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin>
   <Plugin Name="Chemotaxis">
      <ChemicalField Name="FDS" Source="DiffusionSolverFE"/>
   </Plugin>
   <Steppable Type="DiffusionSolverFE">
      <DiffusionField Name="FDS">
         <DiffusionData>
            <FieldName>FDS</FieldName>
            <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant>
            <GlobalDecayConstant>1e-05</GlobalDecayConstant>
            <DiffusionCoefficient CellType="Wall">0</DiffusionCoefficient>
            <DoNotDiffuseTo CellType="Wall">Wall</DoNotDiffuseTo>
            <SecretionData Type="1">50.894680506</SecretionData>
            <SecretionData Type="2">72.1022317407</SecretionData>
         </DiffusionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="10.0"/>
               <ConstantValue PlanePosition="Max" Value="5.0"/>
            </Plane>
            <Plane Axis="Y">
               <ConstantDerivative PlanePosition="Min" Value="10.0"/>
               <ConstantDerivative PlanePosition="Max" Value="5.0"/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
   <Steppable Type="RandomFieldInitializer">
      <offset x="10" y="10" z="0"/>
      <growthsteps>10</growthsteps>
      <order>2</order>
      <types>1,2</types>
      <ncells>115</ncells>
   </Steppable>
</CompuCell3D>
