<CompuCell3D Revision="20150808" Version="3.7.4">
   <Potts>
      <Dimensions x="220" y="220" z="1"/>
      <Steps>1010</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <RandomSeed>970120</RandomSeed>
   </Potts>
   <Plugin Name="PlayerSettings">
      <VisualControl ScreenshotFrequency="1000"/>
   </Plugin>
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType Freeze="" TypeId="9" TypeName="Wall"/>
      <CellType TypeId="1" TypeName="1"/>
      <CellType TypeId="2" TypeName="2"/>
   </Plugin>
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="1" LambdaVolume="66" TargetVolume="63"/>
      <VolumeEnergyParameters CellType="2" LambdaVolume="93" TargetVolume="55"/>
   </Plugin>
   <Plugin Name="CenterOfMass"/>
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Wall" Type2="Wall">0.0</Energy>
      <Energy Type1="Wall" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="1">20</Energy>
      <Energy Type1="Wall" Type2="1">50.0</Energy>
      <Energy Type1="1" Type2="1">-9</Energy>
      <Energy Type1="1" Type2="2">-9</Energy>
      <Energy Type1="Medium" Type2="2">10</Energy>
      <Energy Type1="Wall" Type2="2">50.0</Energy>
      <Energy Type1="2" Type2="2">11</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin>
   <Steppable Type="RandomFieldInitializer">
      <offset x="10" y="10" z="0"/>
      <growthsteps>10</growthsteps>
      <order>2</order>
      <types>1,2</types>
      <ncells>100</ncells>
      <seed>587839</seed>
   </Steppable>
</CompuCell3D>
